PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
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Routines
  Routine intro
    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Thanks for participating. Next you will see instructions for the experiment. Read them carefully, and ask if you have any question.

        [Click anywhere with the mouse to continue...]
    CodeComponent code_import
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Setup the LSL stream
        info = StreamInfo(name='PsychoPy', type='Markers', channel_count=1,
                          channel_format='string', source_id='PsychopyMarkersID321654')
        # Initialize the LSL stream.
        outlet = StreamOutlet(info)
    CodeComponent code_intro
      Code Type = Py
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      Begin Experiment:
        outlet.push_sample(["Intro"])
    MouseComponent mouse_intro
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine instruct
    TextComponent text_instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In every trial you will see some images in quick succession. At the end of the trial you will be asked whether or not a specific image appeared in the last trial.

        [Click anywhere to continue...]
    CodeComponent code_instruct
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(["Instructions1"])
    MouseComponent mouse_instruct
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine stim
    ImageComponent image_stim
      image [set every repeat] = $f"./res/{group}/{IAPS}.jpg"
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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    TextComponent text_stim_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_stim
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([f"{group}/{IAPS}"])
  Routine fix
    TextComponent text_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_fix_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_fix
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(["fix"])
  Routine test
    ImageComponent image_test
      image [set every repeat] = $f"./res/{group}/{target}.jpg"
      pos = (0, .2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_test
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0
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      text:
        Was this image in this trial?

        NO                                  YES
    CodeComponent code_test
      Code Type = Py
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      End Routine:
        #if key_resp_test.corr:
        #    feedback_text = "Correct!"
        #    feedback_color = "Green"
        #else:
        #    feedback_text = "Incorrect!"
        #    feedback_color = "Red"
    MouseComponent mouse_test
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That was it!
        Thank you for your participation!

        The experiment coordinator will contact you shortly...
    KeyboardComponent key_resp_thanks
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_thanks
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine wait
    TextComponent text_wait_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine p_instruct
    TextComponent text_p_instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next is a Practice Run!

        Give the exercise a try. The results will not be recorded.

        [Click anywhere to continue...]
    CodeComponent code_p_instruct
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(["PracticeInstructions"])
        practice = True
    MouseComponent mouse_p_instruct
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent text_feedback
      color [set every repeat] = $feedback_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_text
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    TextComponent text_feedback_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_feedback
      Code Type = Py
      Begin Routine:
        #if not key_resp_test.keys :
        #    feedback_text = "Warning!"
        #    feedback_color = "Yellow"
        #elif key_resp_test.corr:
        #    feedback_text = "Correct!"
        #    feedback_color = "Green"
        #else:
        #    feedback_text = "Incorrect!"
        #    feedback_color = "Red"
  Routine pre
    TextComponent text_pre
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        That was the practice!
        Now the real experiment starts.

        [Click anywhere to continue...]
    CodeComponent code_pre
      Code Type = Py
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      Begin Routine:
        practice = False
    MouseComponent mouse_pre
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine block_init
    TextComponent text_block_init
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"This is block number: {block} out of 3. \n\n [Click anywhere to contiune...]"
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    CodeComponent code_block_init
      Code Type = Py
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      Begin Experiment:
        block_corrects = 0
      Begin Routine:
        outlet.push_sample([f"block{block}"])
        block_corrects = 0
    MouseComponent mouse_block_init
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine block_end
    TextComponent text_block_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $f"""This is the end of this block.

        Take a pause if you want.

        [Click anywhere to continue...]"""
    CodeComponent code_block_end
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(["BlockEnd"])
    MouseComponent mouse__block_end
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine likert
    CodeComponent code_likert
      Code Type = Py
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      Begin Experiment:
        practice = True
      Begin Routine:
        #if key_resp_test.corr:
        #    block_corrects += 1
        #
      Each Frame:
        if practice or (block ==1 and face_condition in ["toon"]):
            continueRoutine = True
        else:
            continueRoutine = False
    ImageComponent image_likert
      image [set every repeat] = $"../data/" + face_condition + "/" + face_file_path
      pos = (0, .2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_likert
      letterHeight = 0.05
      pos = (0, .48)
      startVal [time (s)] = 0.0
      text = How do you feel about this picture?
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    ImageComponent image_likert_v
      image = C:\Users\NIRS\Documents\Alberto\Abstract\doc\img\SAM-V-9.png
      pos = (0, -.15)
      size = (0.9, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_likert_a
      image = C:\Users\NIRS\Documents\Alberto\Abstract\doc\img\SAM-A-9.png
      pos = (0, -.35)
      size = (0.9, 0.15)
      startVal [time (s)] = 0.0
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    SliderComponent slider_v
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ["Very Negative", "Very Positive"]
      letterHeight = 0.01
      pos = (0, -0.25)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-4,-3,-2,-1,0,1,2,3,4)
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    SliderComponent slider_a
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = ["Very Calming", "Very Exciting"]
      letterHeight = 0.01
      pos = (0, -0.45)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    TextComponent text_likert_next
      letterHeight = 0.05
      pos = (.65, -.45)
      startVal [time (s)] = 3
      text = Next
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    MouseComponent mouse_likert
      clickable = [text_likert_next]
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine instruct2
    TextComponent text_instruct2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Answer "YES" by clicking on the text if you just saw the image in the trial.

        Answer "NO"  by clicking on the text if the image shown did NOT appear in the trial.

        [Click anywhere to START...]
    CodeComponent code_instruct2
      Code Type = Py
      Begin Routine:
        outlet.push_sample(["Instructions2"])
    MouseComponent mouse_instruct2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine instruct4
Flow
  Routine intro
  Routine instruct
  Routine instruct2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lists\trials.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('group', 'High'), ('target', 8185)]),
      OrderedDict([('group', 'Mid'), ('target', 2158)]),
      OrderedDict([('group', 'Mid'), ('target', 2150)]),
      OrderedDict([('group', 'High'), ('target', 4668)]),
      OrderedDict([('group', 'Low'), ('target', 7006)]),
      OrderedDict([('group', 'Low'), ('target', 7031)]),
      OrderedDict([('group', 'Low'), ('target', 7950)]),
      OrderedDict([('group', 'High'), ('target', 4800)]),
      OrderedDict([('group', 'High'), ('target', 8492)]),
      OrderedDict([('group', 'Mid'), ('target', 2352)]),
      OrderedDict([('group', 'Mid'), ('target', 2071)]),
      OrderedDict([('group', 'Low'), ('target', 7187)])]
    Routine fix
    LoopInitiator stimuli loopType="TrialHandler"
      conditionsFile = $f".\lists\{group}.csv"
      loopType = fullRandom
      nReps = 1
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      Routine stim
    LoopTerminator stimuli
    Routine test
  LoopTerminator trials
  Routine thanks
